CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160226192310
GitHash:40ae2fe
ModuleCount:26
HasImagePlaneDetails:False

LoadData:[module_num:1|svn_version:\'Unknown\'|variable_revision_number:6|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Input data file location:Default Input Folder\x7C
    Name of the file:CPAutoJob5.csv
    Load images based on this data?:Yes
    Base image location:None\x7C
    Process just a range of rows?:No
    Rows to process:1,100000
    Group images by metadata?:No
    Select metadata tags for grouping:
    Rescale intensities?:Yes

Crop:[module_num:2|svn_version:\'Unknown\'|variable_revision_number:2|show_window:True|notes:\x5B\'Crop the DAPI image down to a 200 x 200 rectangle by entering specific coordinates.\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:Ch1
    Name the output image:Dapi
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle\'s cropping pattern?:First
    Left and right rectangle positions:100,-100
    Top and bottom rectangle positions:100,-100
    Coordinates of ellipse center:200,500
    Ellipse radius, X direction:400
    Ellipse radius, Y direction:200
    Use Plate Fix?:No
    Remove empty rows and columns?:Edges
    Select the masking image:None
    Select the image with a cropping mask:None
    Select the objects:None

Crop:[module_num:3|svn_version:\'Unknown\'|variable_revision_number:2|show_window:True|notes:\x5B\'Use the same cropping from the DAPI image for FITC image.\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:Ch2
    Name the output image:Nestin
    Select the cropping shape:Previous cropping
    Select the cropping method:Coordinates
    Apply which cycle\'s cropping pattern?:First
    Left and right rectangle positions:300,600
    Top and bottom rectangle positions:300,600
    Coordinates of ellipse center:500,500
    Ellipse radius, X direction:400
    Ellipse radius, Y direction:200
    Use Plate Fix?:No
    Remove empty rows and columns?:Edges
    Select the masking image:None
    Select the image with a cropping mask:Dapi
    Select the objects:None

Crop:[module_num:4|svn_version:\'Unknown\'|variable_revision_number:2|show_window:True|notes:\x5B\'Use the same cropping from the DAPI image for the rhodamine image.\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:Ch3
    Name the output image:CellMask
    Select the cropping shape:Previous cropping
    Select the cropping method:Coordinates
    Apply which cycle\'s cropping pattern?:First
    Left and right rectangle positions:300,600
    Top and bottom rectangle positions:300,600
    Coordinates of ellipse center:500,500
    Ellipse radius, X direction:400
    Ellipse radius, Y direction:200
    Use Plate Fix?:No
    Remove empty rows and columns?:Edges
    Select the masking image:None
    Select the image with a cropping mask:Dapi
    Select the objects:None

Crop:[module_num:5|svn_version:\'Unknown\'|variable_revision_number:2|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:Ch4
    Name the output image:EdU
    Select the cropping shape:Previous cropping
    Select the cropping method:Coordinates
    Apply which cycle\'s cropping pattern?:Every
    Left and right rectangle positions:0,end
    Top and bottom rectangle positions:0,end
    Coordinates of ellipse center:500,500
    Ellipse radius, X direction:400
    Ellipse radius, Y direction:200
    Use Plate Fix?:No
    Remove empty rows and columns?:All
    Select the masking image:None
    Select the image with a cropping mask:Dapi
    Select the objects:None

Crop:[module_num:6|svn_version:\'Unknown\'|variable_revision_number:2|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:Ch5
    Name the output image:Mu5AC
    Select the cropping shape:Previous cropping
    Select the cropping method:Coordinates
    Apply which cycle\'s cropping pattern?:Every
    Left and right rectangle positions:0,end
    Top and bottom rectangle positions:0,end
    Coordinates of ellipse center:500,500
    Ellipse radius, X direction:400
    Ellipse radius, Y direction:200
    Use Plate Fix?:No
    Remove empty rows and columns?:All
    Select the masking image:None
    Select the image with a cropping mask:Dapi
    Select the objects:None

MeasureImageQuality:[module_num:7|svn_version:\'Unknown\'|variable_revision_number:5|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:2
    Threshold count:1
    Select the images to measure:Ch1
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:35
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:RobustBackground
    Typical fraction of the image covered by objects:0.1
    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground

Smooth:[module_num:8|svn_version:\'Unknown\'|variable_revision_number:2|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:Dapi
    Name the output image:SmoothNuclei
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:7
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes

IdentifyPrimaryObjects:[module_num:9|svn_version:\'Unknown\'|variable_revision_number:10|show_window:True|notes:\x5B\'Identify the nuclei from the DAPI image. Three-class thresholding performs better than the default two-class thresholding in this case.\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:SmoothNuclei
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,120
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:5
    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:NucleiObjects
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
    Automatically calculate the threshold using the Otsu method?:Yes
    Enter Laplacian of Gaussian threshold:.5
    Automatically calculate the size of objects for the Laplacian of Gaussian filter?:Yes
    Enter LoG filter diameter:5
    Handling of objects if excessive number of objects identified:Continue
    Maximum number of objects:500
    Threshold setting version:1
    Threshold strategy:Automatic
    Thresholding method:MoG
    Select the smoothing method for thresholding:Manual
    Threshold smoothing scale:5
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1
    Approximate fraction of image covered by objects?:0.1
    Manual threshold:0.0
    Select the measurement to threshold with:None
    Select binary image:MoG Global
    Masking objects:From image
    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Method to calculate adaptive window size:Image size
    Size of adaptive window:10
    Use default parameters?:Default
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0

Smooth:[module_num:10|svn_version:\'Unknown\'|variable_revision_number:2|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:CellMask
    Name the output image:SmoothedCellMask
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:9
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes

IdentifySecondaryObjects:[module_num:11|svn_version:\'Unknown\'|variable_revision_number:9|show_window:True|notes:\x5B\'Identify the cells by using the nuclei as a \\xe2\\x80\\x9cseed\\xe2\\x80\\x9d region, then growing outwards until stopped by the image threshold or by a neighbor. The Propagation method is used to delineate the boundary between neighboring cells.\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - B
    Select the input image:SmoothedCellMask
    Number of pixels by which to expand the primary objects:5
    Regularization factor:0.05
    Name the outline image:CellOutlines
    Retain outlines of the identified secondary objects?:Yes
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei
    Retain outlines of the new primary objects?:Yes
    Name the new primary object outlines:FilteredNucleiOutlines
    Fill holes in identified objects?:Yes
    Threshold setting version:1
    Threshold strategy:Automatic
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
    Approximate fraction of image covered by objects?:10%
    Manual threshold:0
    Select the measurement to threshold with:None
    Select binary image:Do not use
    Masking objects:From image
    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Method to calculate adaptive window size:Image size
    Size of adaptive window:10
    Use default parameters?:Default
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0

IdentifyTertiaryObjects:[module_num:12|svn_version:\'Unknown\'|variable_revision_number:2|show_window:True|notes:\x5B\'Identify the cytoplasm by \\xe2\\x80\\x9csubtracting\\xe2\\x80\\x9d the nuclei objects from the cell objects.\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the larger identified objects:Cells
    Select the smaller identified objects:FilteredNuclei
    Name the tertiary objects to be identified:Cytoplasm
    Name the outline image:Do not use
    Retain outlines of the tertiary objects?:No
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectSizeShape:[module_num:13|svn_version:\'Unknown\'|variable_revision_number:1|show_window:True|notes:\x5B\'Measure morphological features from the cell, nuclei and cytoplasm objects.\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select objects to measure:Cells
    Select objects to measure:FilteredNuclei
    Select objects to measure:Cytoplasm
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:14|svn_version:\'Unknown\'|variable_revision_number:3|show_window:True|notes:\x5B\'Measure intensity features from nuclei and cell objects against the cropped DAPI image.\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Hidden:1
    Select an image to measure:Dapi
    Select objects to measure:FilteredNuclei
    Select objects to measure:Cytoplasm

MeasureObjectIntensity:[module_num:15|svn_version:\'Unknown\'|variable_revision_number:3|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Hidden:1
    Select an image to measure:EdU
    Select objects to measure:FilteredNuclei

MeasureObjectIntensity:[module_num:16|svn_version:\'Unknown\'|variable_revision_number:3|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Hidden:1
    Select an image to measure:Nestin
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:FilteredNuclei

MeasureObjectIntensity:[module_num:17|svn_version:\'Unknown\'|variable_revision_number:3|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Hidden:1
    Select an image to measure:Mu5AC
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:FilteredNuclei

MeasureObjectIntensity:[module_num:18|svn_version:\'Unknown\'|variable_revision_number:3|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Hidden:1
    Select an image to measure:CellMask
    Select objects to measure:Cytoplasm
    Select objects to measure:Cells

MeasureTexture:[module_num:19|svn_version:\'Unknown\'|variable_revision_number:4|show_window:True|notes:\x5B\'Measure texture features of the nuclei, cells and cytoplasm from the cropped DAPI image.\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:False|wants_pause:False]
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:Dapi
    Select objects to measure:FilteredNuclei
    Texture scale to measure:3
    Angles to measure:Horizontal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:4
    Measure images or objects?:Objects

GrayToColor:[module_num:20|svn_version:\'Unknown\'|variable_revision_number:3|show_window:True|notes:\x5B\'Combine the cropped grayscale channels into a color RGB image.\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select a color scheme:RGB
    Select the image to be colored red:Nestin
    Select the image to be colored green:Mu5AC
    Select the image to be colored blue:Dapi
    Name the output image:RGBImage
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
    Select the image to be colored cyan:None
    Select the image to be colored magenta:None
    Select the image to be colored yellow:None
    Select the image that determines brightness:None
    Relative weight for the cyan image:1
    Relative weight for the magenta image:1
    Relative weight for the yellow image:1
    Relative weight for the brightness image:1
    Hidden:1
    Image name:None
    Color:#ff0000
    Weight:1.0

SaveImages:[module_num:21|svn_version:\'Unknown\'|variable_revision_number:11|show_window:True|notes:\x5B\'Save the color image as an 8-bit TIF, appending the text RBG to the original filename of the DAPI image.\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the type of image to save:Image
    Select the image to save:RGBImage
    Select the objects to save:None
    Select the module display window to save:RGBImage
    Select method for constructing file names:Sequential numbers
    Select image name for file prefix:Ch1
    Enter file prefix:CP_Thumb
    Number of digits:4
    Append a suffix to the image file name?:Yes
    Text to append to the image name:_RGB
    Saved file format:jpeg
    Output file location:Default Output Folder\x7CNone
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
    Save as grayscale or color image?:Grayscale
    Select colormap:gray
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
    Base image folder:Default Input Folder
    Saved movie format:avi

ConvertObjectsToImage:[module_num:22|svn_version:\'Unknown\'|variable_revision_number:1|show_window:True|notes:\x5B\'This creates a large, but accurate, 16 bit labeled image of the nuclei mask. Only do this if you are ready to follow this up with Qi Tissue to convert it to something way smaller like a CompactCellMap. Otherwise the output directory will be very large\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:False|wants_pause:False]
    Select the input objects:FilteredNuclei
    Name the output image:NucLabels
    Select the color format:uint16
    Select the colormap:Default

SaveImages:[module_num:23|svn_version:\'Unknown\'|variable_revision_number:11|show_window:True|notes:\x5B\'Save the Nuclei mask for future reference and QA\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:False|wants_pause:False]
    Select the type of image to save:Image
    Select the image to save:NucLabels
    Select the objects to save:None
    Select the module display window to save:None
    Select method for constructing file names:Sequential numbers
    Select image name for file prefix:Ch1
    Enter single file name:CPNucLabels
    Number of digits:4
    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CPNucLabels
    Saved file format:tif
    Output file location:Default Output Folder\x7C
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
    Select colormap:gray
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
    Base image folder:Elsewhere...\x7C
    Saved movie format:avi

SaveImages:[module_num:24|svn_version:\'Unknown\'|variable_revision_number:11|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the type of image to save:Image
    Select the image to save:FilteredNucleiOutlines
    Select the objects to save:None
    Select the module display window to save:None
    Select method for constructing file names:Sequential numbers
    Select image name for file prefix:Ch1
    Enter single file name:CPNucOutlines
    Number of digits:4
    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CPNucOutlines
    Saved file format:png
    Output file location:Default Output Folder\x7C
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
    Select colormap:gray
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
    Base image folder:Elsewhere...\x7C
    Saved movie format:avi

SaveImages:[module_num:25|svn_version:\'Unknown\'|variable_revision_number:11|show_window:True|notes:\x5B\'Save the Cell mask for future reference and QA\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the type of image to save:Image
    Select the image to save:CellOutlines
    Select the objects to save:None
    Select the module display window to save:None
    Select method for constructing file names:Sequential numbers
    Select image name for file prefix:Ch1
    Enter single file name:CPCellOutlines
    Number of digits:4
    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CPCellOutlines
    Saved file format:png
    Output file location:Default Output Folder\x7C
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
    Select colormap:gray
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
    Base image folder:Elsewhere...\x7C
    Saved movie format:avi

ExportToSpreadsheet:[module_num:26|svn_version:\'Unknown\'|variable_revision_number:11|show_window:True|notes:\x5B\'Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei, cell and cytoplasm objects will be saved to separate .csv files, in addition to the per-image .csv\\xe2\\x80\\x99s.\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder\x7C.
    Create a GenePattern GCT file?:No
    Select source of sample row name:Metadata
    Select the image to use as the identifier:None
    Select the metadata to use as the identifier:None
    Export all measurement types?:No
    :None\x7CNone
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Lincs_
    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image.csv
    Use the object name for the file name?:Yes
    Data to export:FilteredNuclei
    Combine these object measurements with those of the previous object?:No
    File name:Nuclei.csv
    Use the object name for the file name?:Yes
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
    File name:Cells.csv
    Use the object name for the file name?:Yes
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:No
    File name:Cytoplasm.csv
    Use the object name for the file name?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:DATA.csv
    Use the object name for the file name?:Yes
